PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = stroop
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Routines
  Routine trial
    TextComponent target
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 4
      text [set every repeat] = $word
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    TextComponent fix
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text = +
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    KeyboardComponent response
      allowedKeys = 'x','z','n','m'
      correctAns = $correctANS
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent key_remind
      color = black
      letterHeight = 0.02
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = z = niebieski   x = zielony   n = żółty   m = czerwony
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  Routine instruction
    TextboxComponent instrbox
      bold = False
      borderColor = #ffffff
      editable = False
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        INSTRUKCJA WYKONANIA ZADANIA

        W zadaniu, które za chwilę wykonasz, na ekranie pojawiać się będą nazwy kolorów (NIEBIESKI, ZIELONY, ŻÓŁTY, CZERWONY) w różnych kolorach czcionki. Twoim zadaniem będzie wskazanie KOLORU CZCIONKI danego słowa, ignorując przy tym znaczenie tego słowa.
        Wskazanie koloru będzie polegało na naciśnięciu klawisza na klawiaturze, odpowiadającemu danemu kolorowi:

        „z” dla koloru niebieskiego
        „x” dla koloru zielonego
        „n” dla koloru żółtego
        „m” dla koloru czerwonego

        PRZYKŁAD: Jeśli zobaczysz słowo CZERWONY (którego kolor czcionki będzie zielony), naciśnij klawisz „x” dla koloru zielonego, niezależnie od tego, co oznacza wyświetlone słowo.
        NIEBIESKI - naciśnij klawisz „z” dla koloru niebieskiego (bo kolor czcionki jest niebieski)
        ŻÓŁTY - naciśnij klawisz „m” dla koloru czerwonego (bo kolor czcionki jest czerwony)
        Oprócz słów, czasem na ekranie pojawiać będą się litery w różnych kolorach. Twoje zadanie w takim przypadku jest takie samo – wskazanie jakiego koloru są litery poprzez naciśnięcie odpowiedniego klawisza na klawiaturze (poszczególne kolory odpowiadają tym samym klawiszom, co w przypadku wyświetlanych słów)
        Postaraj się odpowiadać poprawnie i jak najszybciej, gdyż mierzony będzie czas Twojej reakcji.

        Zanim rozpocznie się sesja eksperymentalna, zostaniesz poddany sesji treningowej, która ułatwi Ci zrozumienie zadania. W trakcie sesji treningowej, po każdej udzielonej odpowiedzi zostaniesz poinformowany o tym, czy Twoja odpowiedź była poprawna czy błędna. Informacja o poprawności nie będzie się pojawiać w sesji eksperymentalnej.


        Aby rozpocząć, naciśnij spację.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine reminder
    TextComponent remind
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Zadanie zaraz się rozpocznie.

        Umieść środkowy i wskazujący palec lewej ręki na klawiszach „z” i „x” oraz środkowy i wskazujący palec prawej ręki na klawiszach „n” i „m”.
        Skup swój wzrok na znaku „+” i pamiętaj by udzielać odpowiedzi jak najszybciej.

        Gdy będziesz gotowy/a naciśnij spację.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine END
    TextComponent end_text
      letterHeight = 0.02
      startVal [time (s)] = 0.0
      text = To już koniec eksperymentu. Serdecznie dziękujemy za udział w badaniu!
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Flow
  Routine instruction
  Routine reminder
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = stroop colors.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'czerwony', 'color': 'red', 'zgodny': 1, 'correctANS': 'm'},
      {'word': 'czerwony', 'color': 'green', 'zgodny': 0, 'correctANS': 'x'},
      {'word': 'zielony', 'color': 'green', 'zgodny': 1, 'correctANS': 'x'},
      {'word': 'zielony', 'color': 'blue', 'zgodny': 0, 'correctANS': 'z'},
      {'word': 'niebieski', 'color': 'blue', 'zgodny': 1, 'correctANS': 'z'},
      {'word': 'niebieski', 'color': 'red', 'zgodny': 0, 'correctANS': 'm'},
      {'word': 'żółty', 'color': 'yellow', 'zgodny': 1, 'correctANS': 'n'},
      {'word': 'żółty', 'color': 'red', 'zgodny': 0, 'correctANS': 'm'}]
    Routine trial
  LoopTerminator trials_2
  Routine reminder
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stroop colors.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'word': 'czerwony', 'color': 'red', 'zgodny': 1, 'correctANS': 'm'},
      {'word': 'czerwony', 'color': 'green', 'zgodny': 0, 'correctANS': 'x'},
      {'word': 'zielony', 'color': 'green', 'zgodny': 1, 'correctANS': 'x'},
      {'word': 'zielony', 'color': 'blue', 'zgodny': 0, 'correctANS': 'z'},
      {'word': 'niebieski', 'color': 'blue', 'zgodny': 1, 'correctANS': 'z'},
      {'word': 'niebieski', 'color': 'red', 'zgodny': 0, 'correctANS': 'm'},
      {'word': 'żółty', 'color': 'yellow', 'zgodny': 1, 'correctANS': 'n'},
      {'word': 'żółty', 'color': 'red', 'zgodny': 0, 'correctANS': 'm'},
      {'word': 'HHHHHH', 'color': 'yellow', 'zgodny': None, 'correctANS': 'n'},
      {'word': 'AAAAAA', 'color': 'red', 'zgodny': None, 'correctANS': 'm'}]
    Routine trial
  LoopTerminator trials
  Routine END
